PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Lexical Decision Making
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine instructions
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    TextComponent instructionsText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Lexical Decision-making Task.

        You are about to see a series of characters.

        If the characters make a word,
        press the 'M' key.

        If the characters do not make a word,
        press the 'Z' key.

        Press SPACE to begin the experiment
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $Stimulus
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    KeyboardComponent key_resp
      allowedKeys = 'm','z'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # Initialize variable to track correctness
        correct_response = None
      Each Frame:
        # Check if the participant has responded
        if key_resp.keys:  # If a response was given
            participant_response = key_resp.keys[0]  # Get the first key pressed
        else:
            participant_response = None  # If no response, set as None

        # Compare the participant's response with the correct response from the condition file
        if participant_response == CorrectResponse:
            correct_response = 1  # Correct response
        else:
            correct_response = 0  # Incorrect response
      End Routine:
        # Save correctness and response data to the experiment file
        thisExp.addData('ParticipantResponse', participant_response)
        thisExp.addData('CorrectResponse', correct_response)
  Routine End
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    TextComponent text_z
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        Thank you for participating!

        Your contribution is greatly appreciated!
Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions_file_LDT.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'Stimulus': 'l o v e', 'IsWord': 1.0, 'Valence': 'positive', 'CorrectResponse': 'm'},
      {'Stimulus': 'v a b l i n', 'IsWord': 0.0, 'Valence': 'non-word', 'CorrectResponse': 'z'},
      {'Stimulus': 'f e a r f u l', 'IsWord': 1.0, 'Valence': 'negative', 'CorrectResponse': 'm'},
      {'Stimulus': 'g r i n d l e', 'IsWord': 0.0, 'Valence': 'non-word', 'CorrectResponse': 'z'},
      {'Stimulus': 'd r e n k', 'IsWord': 0.0, 'Valence': 'non-word', 'CorrectResponse': 'z'},
      {'Stimulus': 'b l o r p', 'IsWord': 0.0, 'Valence': 'non-word', 'CorrectResponse': 'z'},
      {'Stimulus': 't a b l e', 'IsWord': 1.0, 'Valence': 'neutral', 'CorrectResponse': 'm'},
      {'Stimulus': 'c h a i r', 'IsWord': 1.0, 'Valence': 'neutral', 'CorrectResponse': 'm'},
      {'Stimulus': 'c h i n d l e', 'IsWord': 0.0, 'Valence': 'non-word', 'CorrectResponse': 'z'},
      {'Stimulus': 'd r e a m', 'IsWord': 1.0, 'Valence': 'positive', 'CorrectResponse': 'm'},
      {'Stimulus': 'e x c i t e d', 'IsWord': 1.0, 'Valence': 'positive', 'CorrectResponse': 'm'},
      {'Stimulus': 'f l o r t', 'IsWord': 0.0, 'Valence': 'non-word', 'CorrectResponse': 'z'},
      {'Stimulus': 'c l i b b e t', 'IsWord': 0.0, 'Valence': 'non-word', 'CorrectResponse': 'z'},
      {'Stimulus': 's t o n e', 'IsWord': 1.0, 'Valence': 'neutral', 'CorrectResponse': 'm'},
      {'Stimulus': 's m o r n', 'IsWord': 0.0, 'Valence': 'non-word', 'CorrectResponse': 'z'},
      {'Stimulus': 'a n g e r', 'IsWord': 1.0, 'Valence': 'negative', 'CorrectResponse': 'm'},
      {'Stimulus': 'p l a r k', 'IsWord': 0.0, 'Valence': 'non-word', 'CorrectResponse': 'z'}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
    Routine trial
  LoopTerminator trials
  Routine End
